
begintemplate Cell2020
objref this
proc init() {
  parameters()
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

public init, topol, subsets, geom, biophys, geom_nseg ,Block_SK
public soma, iseg , den1o6b3s2t1

create iseg, ah1, ah2, ah3, ah4, ah5, ah6
create ah7, ah8, ah9, ah10, ah11, soma, den11o0b1s1t1
create den10o0b1s1t1, den9o0b1s1t1, den8o0b1s1t2, den7o0b1s1t2, den6o0b1s1t2, den5o0b1s1t2, den4o0b1s1t2
create den3o0b1s1t1, den2o0b1s1t2, den1o0b1s1t10, den11o0b1s2t2, den10o0b1s2t2, den9o0b1s2t2, den8o1b2s1t1
create den8o1b1s1t2, den7o1b2s1t1, den7o1b1s1t2, den6o1b2s1t1, den6o1b1s1t1, den5o1b2s1t1, den5o1b1s1t1
create den4o1b2s1t1, den4o1b1s1t1, den3o0b1s2t2, den2o1b2s1t1, den2o1b1s1t2, den1o1b2s1t1, den1o1b1s1t2
create den11o1b2s1t1, den11o1b1s1t2, den10o1b2s1t1, den10o1b1s1t2, den9o1b2s1t1, den9o1b1s1t1, den8o1b2s2t2
create den8o2b2s1t1, den8o2b1s1t1, den7o1b2s2t1, den7o2b2s1t1, den7o2b1s1t1, den6o1b2s2t2, den6o1b1s2t2
create den5o1b2s2t2, den5o1b1s2t2, den4o1b2s2t2, den4o1b1s2t2, den3o1b2s1t1, den3o1b1s1t2, den2o1b2s2t2
create den2o2b2s1t1, den2o2b1s1t1, den1o1b2s2t2, den1o2b2s1t2, den1o2b1s1t2, den11o1b2s2t2, den11o2b2s1t1
create den11o2b1s1t1, den10o1b2s2t2, den10o2b2s1t3, den10o2b1s1t1, den9o1b2s2t2, den9o1b1s2t2, den8o2b4s1t1
create den8o2b3s1t1, den8o2b2s2t1, den8o2b1s2t2, den7o1b2s3t3, den7o2b2s2t1, den7o2b1s2t1, den6o2b4s1t1
create den6o2b3s1t1, den6o2b2s1t1, den6o2b1s1t2, den5o2b4s1t1, den5o2b3s1t2, den5o2b2s1t1, den5o2b1s1t1
create den4o2b4s1t1, den4o2b3s1t2, den4o2b2s1t1, den4o2b1s1t1, den3o1b2s2t2, den3o2b2s1t1, den3o2b1s1t1
create den2o2b4s1t1, den2o2b3s1t1, den2o2b2s2t1, den2o2b1s2t2, den1o2b4s1t1, den1o2b3s1t1, den1o3b4s1t2
create den1o3b3s1t2, den1o3b2s1t1, den1o3b1s1t2, den11o2b4s1t1, den11o2b3s1t1, den11o2b2s2t2, den11o2b1s2t2
create den10o2b4s1t1, den10o2b3s1t1, den10o2b1s2t2, den9o2b4s1t1, den9o2b3s1t1, den9o2b2s1t1, den9o2b1s1t1
create den8o2b4s2t3, den8o2b3s2t1, den8o2b2s3t1, den8o3b2s1t1, den8o3b1s1t2, den7o2b2s3t1, den7o2b1s3t1
create den6o2b4s2t1, den6o2b3s2t2, den6o2b2s2t2, den6o3b2s1t1, den6o3b1s1t1, den5o2b4s2t2, den5o3b6s1t3
create den5o3b5s1t1, den5o2b2s2t2, den5o2b1s2t2, den4o2b4s2t1, den4o3b6s1t1, den4o3b5s1t2, den4o2b2s2t2
create den4o2b1s2t2, den3o2b4s1t1, den3o2b3s1t1, den3o2b2s2t2, den3o2b1s2t2, den2o2b4s2t2, den2o2b3s2t2
create den2o2b2s3t2, den2o3b2s1t1, den2o3b1s1t1, den1o2b4s2t1, den1o2b3s2t2, den1o4b8s1t1, den1o4b7s1t1
create den1o4b6s1t1, den1o4b5s1t1, den1o3b2s2t2, den1o4b2s1t1, den1o4b1s1t2, den11o2b4s2t3, den11o2b3s2t2
create den11o3b4s1t1, den11o3b3s1t2, den11o3b2s1t1, den11o3b1s1t2, den10o2b4s2t1, den10o2b3s2t2, den10o3b2s1t1
create den10o3b1s1t2, den9o2b4s2t3, den9o2b3s2t1, den9o2b2s2t1, den9o2b1s2t2, den8o2b3s3t1, den8o2b2s4t3
create den8o3b2s2t3, den8o4b2s1t1, den8o4b1s1t1, den7o2b2s4t1, den7o2b1s4t1, den6o2b4s3t1, den6o3b6s1t1
create den6o3b5s1t2, den6o3b4s1t3, den6o3b3s1t1, den6o3b2s2t1, den6o3b1s2t2, den5o3b8s1t1, den5o3b7s1t1
create den5o3b5s2t2, den5o3b4s1t1, den5o3b3s1t2, den5o3b2s1t1, den5o3b1s1t2, den4o2b4s3t1, den4o3b6s2t3
create den4o4b10s1t1, den4o4b9s1t1, den4o3b4s1t1, den4o3b3s1t1, den4o3b2s1t1, den4o3b1s1t2, den3o2b4s2t3
create den3o2b3s2t1, den3o3b4s1t1, den3o3b3s1t2, den3o3b2s1t1, den3o3b1s1t1, den2o3b8s1t1, den2o3b7s1t1
create den2o3b6s1t1, den2o3b5s1t2, den2o3b4s1t3, den2o3b3s1t1, den2o3b2s2t2, den2o3b1s2t2, den1o2b4s3t1
create den1o3b6s1t1, den1o3b5s1t1, den1o4b8s2t1, den1o4b7s2t2, den1o4b6s2t2, den1o4b5s2t2, den1o4b4s1t1
create den1o4b3s1t1, den1o4b2s2t2, den1o5b2s1t1, den1o5b1s1t1, den11o3b6s1t1, den11o3b5s1t1, den11o3b4s2t3
create den11o4b6s1t3, den11o4b5s1t1, den11o3b2s2t1, den11o4b2s1t2, den11o4b1s1t1, den10o2b4s3t3, den10o3b6s1t1
create den10o3b5s1t2, den10o3b2s2t3, den10o4b2s1t1, den10o4b1s1t2, den9o2b3s3t1, den9o2b2s3t1, den9o3b2s1t3
create den9o3b1s1t1, den8o2b3s4t1, den8o4b2s2t2, den8o4b1s2t2, den7o2b2s5t3, den7o2b1s5t1, den6o2b4s4t1
create den6o3b6s2t3, den6o4b10s1t2, den6o4b9s1t1, den6o3b3s2t2, den6o3b2s3t1, den6o4b2s1t1, den6o4b1s1t1
create den5o3b8s2t3, den5o3b7s2t3, den5o4b10s1t1, den5o4b9s1t2, den5o3b4s2t3, den5o4b6s1t3, den5o4b5s1t1
create den5o3b2s2t2, den5o4b2s1t1, den5o4b1s1t1, den4o2b4s4t3, den4o4b10s2t3, den4o4b9s2t2, den4o3b4s2t3
create den4o3b3s2t1, den4o3b2s2t1, den4o4b2s1t1, den4o4b1s1t1, den3o2b3s3t1, den3o3b4s2t1, den3o4b6s1t1
create den3o4b5s1t2, den3o3b2s2t1, den3o3b1s2t2, den2o3b8s2t2, den2o3b7s2t1, den2o3b6s2t3, den2o4b10s1t1
create den2o4b9s1t2, den2o3b3s2t1, den2o4b4s1t1, den2o4b3s1t2, den2o4b2s1t1, den2o4b1s1t1, den1o2b4s4t3
create den1o3b6s2t2, den1o3b5s2t2, den1o4b8s3t1, den1o5b14s1t1, den1o5b13s1t1, den1o5b12s1t1, den1o5b11s1t1
create den1o5b10s1t1, den1o5b9s1t1, den1o4b4s2t3, den1o4b3s2t1, den1o5b4s1t1, den1o5b3s1t2, den1o5b2s2t2
create den1o5b1s2t2, den11o3b6s2t3, den11o3b5s2t1, den11o4b5s2t1, den11o3b2s3t1, den11o5b4s1t3, den11o5b3s1t1
create den11o4b1s2t2, den10o3b6s2t2, den10o4b10s1t1, den10o4b9s1t2, den10o4b2s2t1, den10o5b2s1t3, den10o5b1s1t1
create den9o2b3s4t1, den9o2b2s4t1, den9o3b1s2t1, den8o2b3s5t1, den8o5b4s1t1, den8o5b3s1t1, den8o5b2s1t1
create den8o5b1s1t1, den7o2b1s6t1, den6o2b4s5t1, den6o5b20s1t3, den6o5b19s1t1, den6o4b9s2t1, den6o4b6s1t1
create den6o4b5s1t2, den6o3b2s4t1, den6o4b2s2t3, den6o4b1s2t2, den5o4b10s2t1, den5o5b18s1t1, den5o5b17s1t1
create den5o4b5s2t2, den5o4b4s1t1, den5o4b3s1t2, den5o4b2s2t1, den5o4b1s2t2, den4o5b18s1t1, den4o5b17s1t2
create den4o3b3s3t1, den4o3b2s3t1, den4o4b2s2t2, den4o4b1s2t2, den3o2b3s4t3, den3o3b4s3t1, den3o4b6s2t3
create den3o5b10s1t1, den3o5b9s1t1, den3o3b2s3t1, den3o4b2s1t1, den3o4b1s1t2, den2o4b16s1t1, den2o4b15s1t1
create den2o3b7s3t1, den2o4b10s2t3, den2o5b18s1t1, den2o5b17s1t2, den2o3b3s3t1, den2o4b4s2t1, den2o5b6s1t3
create den2o5b5s1t2, den2o4b2s2t2, den2o4b1s2t2, den1o4b12s1t1, den1o4b11s1t1, den1o4b10s1t1, den1o4b9s1t1
create den1o4b8s4t3, den1o5b14s2t1, den1o5b13s2t3, den1o5b12s2t3, den1o5b11s2t2, den1o5b10s2t1, den1o5b9s2t2
create den1o4b3s3t1, den1o5b4s2t3, den1o6b6s1t1, den1o6b5s1t2, den1o6b4s1t1, den1o6b3s1t1, den1o6b2s1t1
create den1o6b1s1t2, den11o3b5s3t1, den11o4b5s3t2, den11o3b2s4t3, den11o5b3s2t1, den11o5b2s1t1, den11o5b1s1t2
create den10o4b12s1t1, den10o4b11s1t1, den10o4b10s2t1, den10o5b18s1t1, den10o5b17s1t1, den10o4b2s3t1, den10o5b1s2t2
create den9o2b3s5t1, den9o2b2s5t3, den9o3b1s3t1, den8o2b3s6t3, den8o5b4s2t3, den8o5b3s2t2, den8o5b2s2t2
create den8o5b1s2t1, den7o2b1s7t1, den6o2b4s6t3, den6o5b19s2t3, den6o4b9s3t1, den6o4b6s2t3, den6o5b10s1t1
create den6o5b9s1t2, den6o3b2s5t3, den6o5b2s1t1, den6o5b1s1t1, den5o4b10s3t1, den5o5b18s2t3, den5o5b17s2t2
create den5o5b10s1t3, den5o5b9s1t1, den5o4b4s2t3, den5o5b6s1t1, den5o5b5s1t1, den5o4b2s3t1, den5o5b2s1t1
create den5o5b1s1t1, den4o5b18s2t3, den4o6b34s1t2, den4o6b33s1t1, den4o3b3s4t1, den4o3b2s4t1, den4o5b4s1t1
create den4o5b3s1t1, den4o5b2s1t3, den4o5b1s1t1, den3o3b4s4t1, den3o5b10s2t1, den3o5b9s2t1, den3o3b2s4t1
create den3o4b2s2t2, den3o5b2s1t1, den3o5b1s1t2, den2o4b16s2t3, den2o4b15s2t1, den2o3b7s4t3, den2o5b18s2t1
create den2o6b34s1t1, den2o6b33s1t2, den2o3b3s4t1, den2o4b4s3t3, den2o6b10s1t1, den2o6b9s1t1, den2o5b4s1t1
create den2o5b3s1t1, den2o5b2s1t1, den2o5b1s1t2, den1o4b12s2t3, den1o4b11s2t1, den1o4b10s2t2, den1o4b9s2t2
create den1o5b14s3t1, den1o6b22s1t2, den1o6b21s1t2, den1o5b10s3t3, den1o6b18s1t1, den1o6b17s1t1, den1o4b3s4t1
create den1o6b6s2t2, den1o7b10s1t1, den1o7b9s1t1, den1o6b4s2t3, den1o6b3s2t1, den1o6b2s2t2, den1o7b2s1t3
create den1o7b1s1t1, den11o3b5s4t1, den11o5b10s1t3, den11o5b9s1t3, den11o5b3s3t1, den11o5b2s2t3, den11o6b2s1t2
create den11o6b1s1t1, den10o4b12s2t3, den10o4b11s2t1, den10o4b10s3t3, den10o5b18s2t1, den10o5b17s2t2, den10o4b2s4t1
create den10o6b2s1t1, den10o6b1s1t1, den9o2b3s6t3, den9o3b1s4t3, den8o6b6s1t1, den8o6b5s1t1, den8o6b4s1t3
create den8o6b3s1t1, den8o5b1s3t1, den7o2b1s8t3, den6o4b9s4t1, den6o5b10s2t3, den6o6b18s1t1, den6o6b17s1t1
create den6o5b2s2t3, den6o5b1s2t1, den5o4b10s4t3, den5o6b34s1t1, den5o6b33s1t1, den5o5b9s2t1, den5o5b6s2t3
create den5o5b5s2t1, den5o4b2s4t1, den5o5b2s2t3, den5o5b1s2t1, den4o7b68s1t1, den4o7b67s1t1, den4o6b33s2t2
create den4o3b3s5t3, den4o3b2s5t1, den4o5b4s2t3, den4o5b3s2t1, den4o5b1s2t2, den3o3b4s5t3, den3o5b10s3t1
create den3o5b9s3t1, den3o3b2s5t1, den3o5b4s1t1, den3o5b3s1t1, den3o5b2s2t1, den3o6b2s1t1, den3o6b1s1t1
create den2o4b15s3t1, den2o5b18s3t1, den2o6b34s2t3, den2o7b66s1t3, den2o7b65s1t1, den2o3b3s5t3, den2o6b10s2t1
create den2o6b9s2t3, den2o5b4s2t3, den2o5b3s2t1, den2o5b2s2t3, den2o6b2s1t3, den2o6b1s1t1, den1o4b11s3t3
create den1o5b20s1t3, den1o5b19s1t1, den1o5b18s1t1, den1o5b17s1t1, den1o5b14s4t3, den1o7b44s1t3, den1o7b43s1t1
create den1o7b42s1t1, den1o7b41s1t1, den1o6b18s2t3, den1o6b17s2t1, den1o4b3s5t1, den1o7b12s1t1, den1o7b11s1t1
create den1o7b10s2t3, den1o7b9s2t1, den1o6b3s3t1, den1o7b4s1t1, den1o7b3s1t1, den1o7b1s2t1, den11o3b5s5t3
create den11o5b3s4t3, den11o7b4s1t3, den11o7b3s1t1, den11o6b1s2t1, den10o4b11s3t3, den10o5b18s3t3, den10o6b34s1t1
create den10o6b33s1t1, den10o4b2s5t3, den10o6b2s2t1, den10o6b1s2t1, den8o6b6s2t3, den8o6b5s2t1, den8o6b3s2t1
create den8o5b1s4t3, den6o4b9s5t1, den6o6b18s2t2, den6o6b17s2t2, den6o5b1s3t1, den5o6b34s2t3, den5o6b33s2t1
create den5o5b9s3t1, den5o5b5s3t1, den5o4b2s5t3, den5o5b1s3t3, den4o7b68s2t3, den4o7b67s2t1, den4o7b66s1t1
create den4o7b65s1t1, den4o3b2s6t2, den4o5b3s3t1, den4o6b2s1t1, den4o6b1s1t1, den3o5b10s4t1, den3o5b9s4t1
create den3o3b2s6t3, den3o5b4s2t2, den3o5b3s2t1, den3o5b2s3t1, den3o6b2s2t1, den3o6b1s2t2, den2o4b15s4t1
create den2o5b18s4t1, den2o7b65s2t1, den2o6b10s3t1, den2o5b3s3t1, den2o6b1s2t1, den1o5b19s2t1, den1o5b18s2t3
create den1o5b17s2t1, den1o7b43s2t3, den1o7b42s2t1, den1o7b41s2t2, den1o6b17s3t3, den1o4b3s6t1, den1o7b12s2t3
create den1o7b11s2t1, den1o7b9s3t3, den1o6b3s4t1, den1o7b4s2t3, den1o7b3s2t1, den1o7b1s3t1, den11o7b3s2t1
create den11o6b1s3t1, den10o6b34s2t1, den10o6b33s2t1, den10o6b2s3t3, den10o6b1s3t1, den8o6b5s3t1, den8o6b3s3t1
create den6o4b9s6t3, den6o7b36s1t1, den6o7b35s1t1, den6o7b34s1t1, den6o7b33s1t2, den6o5b1s4t1, den5o6b33s3t1
create den5o5b9s4t1, den5o5b5s4t1, den4o7b67s3t1, den4o7b66s2t3, den4o7b65s2t1, den4o4b4s1t3, den4o4b3s1t1
create den4o5b3s4t3, den4o6b2s2t3, den4o6b1s2t1, den3o5b10s5t1, den3o5b9s5t3, den3o6b8s1t3, den3o6b7s1t1
create den3o5b3s3t1, den3o5b2s4t3, den3o6b2s3t1, den3o7b2s1t1, den3o7b1s1t1, den2o4b15s5t3, den2o5b18s5t3
create den2o7b65s3t3, den2o6b10s4t3, den2o5b3s4t3, den2o6b1s3t1, den1o5b19s3t1, den1o5b17s3t1, den1o7b42s3t3
create den1o8b82s1t1, den1o8b81s1t2, den1o4b3s7t3, den1o7b11s3t1, den1o6b3s5t3, den1o7b3s3t3, den1o7b1s4t3
create den11o7b3s3t3, den11o6b1s4t1, den10o6b34s3t1, den10o6b33s3t1, den10o6b1s4t1, den8o6b5s4t3, den8o6b3s4t3
create den6o7b36s2t3, den6o7b35s2t3, den6o7b34s2t3, den6o8b66s1t1, den6o8b65s1t2, den6o5b1s5t1, den5o6b33s4t3
create den5o5b9s5t3, den5o5b5s5t1, den4o7b67s4t1, den4o7b65s3t3, den4o4b3s2t3, den4o6b1s3t1, den3o5b10s6t3
create den3o6b7s2t3, den3o5b3s4t1, den3o6b2s4t1, den3o7b2s2t1, den3o7b1s2t1, den2o6b1s4t2, den1o5b19s4t3
create den1o5b17s4t3, den1o8b82s2t3, den1o9b162s1t1, den1o9b161s1t1, den1o7b11s4t1, den11o6b1s5t3, den10o6b34s4t3
create den10o6b33s4t3, den10o6b1s5t3, den6o8b66s2t1, den6o9b130s1t1, den6o9b129s1t1, den6o5b1s6t3, den5o5b5s6t3
create den4o7b67s5t3, den4o6b1s4t3, den3o5b3s5t3, den3o6b2s5t1, den3o7b2s3t3, den3o7b1s3t1, den2o7b2s1t3
create den2o7b1s1t3, den1o9b162s2t3, den1o9b161s2t3, den1o7b11s5t3, den6o8b66s3t3, den6o9b130s2t3, den6o9b129s2t3
create den3o6b2s6t3, den3o7b1s4t3

proc topol() { local i
  connect ah1(0), iseg(1)
  connect ah2(0), ah1(1)
  connect ah3(0), ah2(1)
  connect ah4(0), ah3(1)
  connect ah5(0), ah4(1)
  connect ah6(0), ah5(1)
  connect ah7(0), ah6(1)
  connect ah8(0), ah7(1)
  connect ah9(0), ah8(1)
  connect ah10(0), ah9(1)
  connect ah11(0), ah10(1)
  connect soma(0), ah11(1)
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  topol_1()
}
proc topol_1() {
  connect den4o3b1s1t2(0), den4o2b1s2t2(1)
  connect den3o2b4s2t3(0), den3o2b4s1t1(1)
  connect den3o2b3s2t1(0), den3o2b3s1t1(1)
  connect den3o3b4s1t1(0), den3o2b2s2t2(1)
  connect den3o3b3s1t2(0), den3o2b2s2t2(1)
  connect den3o3b2s1t1(0), den3o2b1s2t2(1)
  connect den3o3b1s1t1(0), den3o2b1s2t2(1)
  connect den2o3b8s1t1(0), den2o2b4s2t2(1)
  connect den2o3b7s1t1(0), den2o2b4s2t2(1)
  connect den2o3b6s1t1(0), den2o2b3s2t2(1)
  connect den2o3b5s1t2(0), den2o2b3s2t2(1)
  connect den2o3b4s1t3(0), den2o2b2s3t2(1)
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  topol_2()
}
proc topol_2() {
  connect den10o4b10s2t1(0), den10o4b10s1t1(1)
  connect den10o5b18s1t1(0), den10o4b9s1t2(1)
  connect den10o5b17s1t1(0), den10o4b9s1t2(1)
  connect den10o4b2s3t1(0), den10o4b2s2t1(1)
  connect den10o5b1s2t2(0), den10o5b1s1t1(1)
  connect den9o2b3s5t1(0), den9o2b3s4t1(1)
  connect den9o2b2s5t3(0), den9o2b2s4t1(1)
  connect den9o3b1s3t1(0), den9o3b1s2t1(1)
  connect den8o2b3s6t3(0), den8o2b3s5t1(1)
  connect den8o5b4s2t3(0), den8o5b4s1t1(1)
  connect den8o5b3s2t2(0), den8o5b3s1t1(1)
  connect den8o5b2s2t2(0), den8o5b2s1t1(1)
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  topol_3()
}
proc topol_3() {
  connect den4o7b66s1t1(0), den4o6b33s2t2(1)
  connect den4o7b65s1t1(0), den4o6b33s2t2(1)
  connect den4o3b2s6t2(0), den4o3b2s5t1(1)
  connect den4o5b3s3t1(0), den4o5b3s2t1(1)
  connect den4o6b2s1t1(0), den4o5b1s2t2(1)
  connect den4o6b1s1t1(0), den4o5b1s2t2(1)
  connect den3o5b10s4t1(0), den3o5b10s3t1(1)
  connect den3o5b9s4t1(0), den3o5b9s3t1(1)
  connect den3o3b2s6t3(0), den3o3b2s5t1(1)
  connect den3o5b4s2t2(0), den3o5b4s1t1(1)
  connect den3o5b3s2t1(0), den3o5b3s1t1(1)
  connect den3o5b2s3t1(0), den3o5b2s2t1(1)
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  basic_shape()
}
proc shape3d_1() {
  iseg {pt3dclear()
	pt3dadd(-74.4, 0, 0, 3.3)
	pt3dadd(-44.4, 0, 0, 3.3)
  }
  ah1 {pt3dclear()
	pt3dadd(-44.4, 0, 0, 3)
	pt3dadd(-42.6, 0, 0, 3)
  }
  ah2 {pt3dclear()
	pt3dadd(-42.6, 0, 0, 4)
	pt3dadd(-40.78, 0, 0, 4)
  }
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  }
}
proc shape3d_2() {
  den2o2b2s2t1 {	pt3dadd(63, 206, -450, 2.91)
  }
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  }
}
proc shape3d_3() {
  den4o3b2s1t1 {	pt3dadd(54, 377, -300, 2.38)
  }
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  }
}
proc shape3d_4() {
  den1o5b11s1t1 {	pt3dadd(-143, -393, 375, 3.44)
  }
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  }
}
proc shape3d_5() {
  den10o4b11s1t1 {	pt3dadd(423, -208, 525, 1.32)
  }
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  }
}
proc shape3d_6() {
  den9o3b1s4t3 {	pt3dadd(-295, -331, 525, 0.79)
  }
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  }
}
proc shape3d_7() {
  den4o7b67s2t1 {	pt3dadd(631, 841, -75, 1.32)
  }
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  }
}
proc shape3d_8() {
  den5o5b9s5t3 {	pt3dadd(776, -189, 975, 0.53)
  }
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
}

objref all
proc subsets() { local i
  objref all
  all = new SectionList()
    iseg all.append()
    ah1 all.append()
    ah2 all.append()
    ah3 all.append()
    ah4 all.append()
    ah5 all.append()
    ah6 all.append()
    ah7 all.append()
    ah8 all.append()
    ah9 all.append()
    ah10 all.append()
    ah11 all.append()
    soma all.append()
    den11o0b1s1t1 all.append()
    den10o0b1s1t1 all.append()
    den9o0b1s1t1 all.append()
    den8o0b1s1t2 all.append()
    den7o0b1s1t2 all.append()
    den6o0b1s1t2 all.append()
    den5o0b1s1t2 all.append()
    den4o0b1s1t2 all.append()
    den3o0b1s1t1 all.append()
    den2o0b1s1t2 all.append()
    den1o0b1s1t10 all.append()
    den11o0b1s2t2 all.append()
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  subsets_1()
}
proc subsets_1(){
    den4o3b3s1t1 all.append()
    den4o3b2s1t1 all.append()
    den4o3b1s1t2 all.append()
    den3o2b4s2t3 all.append()
    den3o2b3s2t1 all.append()
    den3o3b4s1t1 all.append()
    den3o3b3s1t2 all.append()
    den3o3b2s1t1 all.append()
    den3o3b1s1t1 all.append()
    den2o3b8s1t1 all.append()
    den2o3b7s1t1 all.append()
    den2o3b6s1t1 all.append()
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  subsets_2()
}
proc subsets_2(){
    den10o4b12s1t1 all.append()
    den10o4b11s1t1 all.append()
    den10o4b10s2t1 all.append()
    den10o5b18s1t1 all.append()
    den10o5b17s1t1 all.append()
    den10o4b2s3t1 all.append()
    den10o5b1s2t2 all.append()
    den9o2b3s5t1 all.append()
    den9o2b2s5t3 all.append()
    den9o3b1s3t1 all.append()
    den8o2b3s6t3 all.append()
    den8o5b4s2t3 all.append()
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  subsets_3()
}
proc subsets_3(){
    den4o7b68s2t3 all.append()
    den4o7b67s2t1 all.append()
    den4o7b66s1t1 all.append()
    den4o7b65s1t1 all.append()
    den4o3b2s6t2 all.append()
    den4o5b3s3t1 all.append()
    den4o6b2s1t1 all.append()
    den4o6b1s1t1 all.append()
    den3o5b10s4t1 all.append()
    den3o5b9s4t1 all.append()
    den3o3b2s6t3 all.append()
    den3o5b4s2t2 all.append()
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
}


proc CaDenplacement(){
  print "Calcium Channel with warm-up module was added"

	forsec "den" {
		// Whole Uniform Distribution - 
		// -------------------------------------------------
		insert CaDen
		theta_m_CaDen	= theta  	// 
		O_tau_CaDen 	= O_tau 	
		O_tau2_CaDen	= O_tau2
		W_tau_d_CaDen	= W_tau_d 	//
		tailon_CaDen	= tailOnOff
		gcabar_CaDen	= LlvaWU_MAX 
		gkcabar_CaDen	= LlvaWU_MAX * sK_CaDen_conduct 

  }

}

proc Block_SK(){
  print "SK channels are blocked in all sections"
  forsec "den"{
    gkcabar_CaDen = 0
  }

  soma.gkcabar_CaDen = 0
}

proc parameters() {
        celsius = 36                  // Temperature at which simulations are performed
        Vrest= -70                    // mV, resting membrane potential
}

proc geom() {
}

external lambda_f

proc geom_nseg() {
  D_LAMBDA = 0.1
  forall { 
    nseg = int((L/(D_LAMBDA*lambda_f(100))+0.9)/2)*2 + 1
  }   
}

proc biophys() {
    LlvaWU_MAX          = 0.0001 *0.35
    sK_CaDen_conduct    = 0.53 // sKl conductance ratio to the Cav1.3
    theta               = -43
    O_tau               = 10
    O_tau2              = 50
    W_tau_d             = 1200
    tailOnOff			      = 1
    soma {
      // insert extracellular // not working with parallel Computing v
      // insert xtra

      //insert new channel model ( LLvaWU + sK )
      insert CaDen
      theta_m_CaDen   = theta 
      O_tau_CaDen     = O_tau
      W_tau_d_CaDen   = W_tau_d
      tailon_CaDen    = tailOnOff
      gcabar_CaDen    = LlvaWU_MAX * 0.7  
      gkcabar_CaDen   = sK_CaDen_conduct * gcabar_CaDen * 0.3




      // insert passive properties
      insert pas        g_pas=(1/225)       //S/cm2//
                        e_pas=-70           //mv//
      Ra=70             //ohm.cm//
      cm=1              //uf/cm2//
  }

    iseg {

      insert pas        g_pas=(1/225)       //S/cm2//
                        e_pas=-70           //mv//

      Ra=70     //ohm.cm//
      cm=1              //uf/cm2//
  }

  forsec "ah" {


      insert pas        g_pas=(1/225)       //S/cm2//
                        e_pas=-70           //mv//

      Ra=70             //ohm.cm//
      cm=1              //uf/cm2//
  }

  forsec "den" {
      // insert extracellular
      // insert xtra
      insert pas        g_pas=(1/11000)     //S/cm2//
                        e_pas=-70           //mv//

      Ra=70             //ohm.cm//
      cm=1              //uf/cm2//
      
  }
  CaDenplacement()

}



access soma

endtemplate Cell2020
